PsychoPy2experiment version="2026.1.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001', 'ppg_port': ''}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = (1280, 720)
  color = $[-1,-1,-1]
  expName = fNIRS_HeartFeedback
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine Experimenter_Welcome
    RoutineSettingsComponent Experimenter_Welcome
      color = $[-1,-1,-1]
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    TextComponent text_welcome
      letterHeight = 0.042
      startVal [time (s)] = 0.0
      wrapWidth = 0.88
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      text:
        실험 준비중입니다.

        실험자가 설정을 완료할 때까지
        잠시만 기다려주세요.
    KeyboardComponent key_welcome
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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    CodeComponent code_2
      Code Type = Py
      Before Experiment:
        import os, sys, subprocess
        # stdout/stderr를 UTF-8로 강제 (Windows cp949에서 PsychoPy Runner 디코딩 에러 방지)
        try:
            sys.stdout.reconfigure(encoding='utf-8', errors='replace')
            sys.stderr.reconfigure(encoding='utf-8', errors='replace')
        except Exception:
            pass
        from pylsl import StreamInfo, StreamOutlet, StreamInlet, resolve_byprop

        print('[psychopy] === Before Experiment ===')

        # psychopy_experiment 폴더를 sys.path에 (ecg_renderer import용)
        _here = os.path.dirname(os.path.abspath(__file__))
        if _here not in sys.path:
            sys.path.insert(0, _here)

        # 프로젝트 경로 (biofeedback 폴더 위치)
        project_dir = None
        for c in (_here, os.path.abspath(os.getcwd()), os.path.dirname(os.path.abspath(os.getcwd()))):
            for d in (c, os.path.dirname(c)):
                if os.path.isdir(os.path.join(d, 'biofeedback')):
                    project_dir = d; break
            if project_dir: break
        print(f'[psychopy] project_dir = {project_dir}')

        # 바이오피드백 subprocess 실행 (이미 떠있으면 skip)
        if project_dir is not None:
            _existing = resolve_byprop('name', 'BiofeedbackControl', 1, 0.3)
            if _existing:
                print('[psychopy] biofeedback already running')
            else:
                python_exe = os.path.join(project_dir, '.venv', 'Scripts', 'python.exe')
                if not os.path.exists(python_exe):
                    python_exe = sys.executable
                try:
                    _log_path = os.path.join(project_dir, 'biofeedback_console.log')
                    _log_f = open(_log_path, 'w', encoding='utf-8')
                    subprocess.Popen(
                        [python_exe, '-m', 'biofeedback.main'],
                        cwd=project_dir,
                        stdout=_log_f, stderr=subprocess.STDOUT,
                        creationflags=(0x08000000 if os.name == 'nt' else 0),
                    )
                    print(f'[psychopy] biofeedback launched, log: {_log_path}')
                except Exception as _e:
                    print(f'[psychopy] subprocess failed: {_e!r}')

        # LSL outlet PsychoPy → biofeedback
        info = StreamInfo('PsychoPyMarkers', 'Markers', 1, 0, 'string', 'psychopy_markers')
        outlet = StreamOutlet(info)
        print('[psychopy] outlet PsychoPyMarkers created')

        # Inlets는 None으로 시작, Welcome Each Frame에서 lazy resolve
        bpm_inlet = None
        cal_inlet = None
        control_inlet = None
        _inlet_check_counter = 0
      Begin Experiment:
        # === ECG renderer 초기화 ===
        _ecg_init_err = None
        try:
            import ecg_renderer
            ecg_renderer.init(win)
        except Exception as _e:
            import traceback
            _ecg_init_err = f'{_e!r}'
            traceback.print_exc()
            ecg_renderer = None

        # 진단용 status TextStim
        from psychopy import visual as _v
        status_text = _v.TextStim(
            win, name='status_text',
            text='', pos=(0, -0.45), units='height',
            color='yellow', height=0.022,
            alignText='center',
        )
        # FPS 측정용
        _fps_frames = 0
        _fps_t0 = core.getTime()
        _fps_cur = 0.0
      Each Frame:
        # Lazy LSL inlet resolution + 마커 polling
        try:
            _inlet_check_counter += 1
            if _inlet_check_counter % 30 == 0:
                if control_inlet is None:
                    _s = resolve_byprop('name', 'BiofeedbackControl', 1, 0.0)
                    if _s: control_inlet = StreamInlet(_s[0]); print('[psychopy] control_inlet OK')
                if bpm_inlet is None:
                    _s = resolve_byprop('name', 'BPM_processed', 1, 0.0)
                    if _s: bpm_inlet = StreamInlet(_s[0]); print('[psychopy] bpm_inlet OK')
                if cal_inlet is None:
                    _s = resolve_byprop('name', 'Calibration_Result', 1, 0.0)
                    if _s: cal_inlet = StreamInlet(_s[0]); print('[psychopy] cal_inlet OK')
            # cal_inlet 먼저 폴링 (control_inlet보다 우선)
            if cal_inlet is not None:
                sample, _ = cal_inlet.pull_sample(timeout=0.0)
                if sample:
                    expInfo['baseline_bpm'] = float(sample[0])
                    print(f'[psychopy] baseline_bpm received from Calibration_Result: {sample[0]}')
            # control_inlet에 baseline_bpm이 결합되어 올 수도 있음 (experiment_start:65.5)
            if control_inlet is not None:
                sample, _ = control_inlet.pull_sample(timeout=0.0)
                if sample and 'experiment_start' in sample[0]:
                    _parts = sample[0].split(':')
                    if len(_parts) >= 2:
                        try:
                            expInfo['baseline_bpm'] = float(_parts[1])
                            print(f'[psychopy] baseline_bpm parsed from control marker: {_parts[1]}')
                        except ValueError:
                            pass
                    continueRoutine = False
        except Exception as _e:
            print(f'[psychopy] welcome poll error: {_e!r}')
      End Routine:
        thisExp.addData('baseline_bpm', expInfo.get('baseline_bpm', 70.0))
  Routine Daily_Screening
    RoutineSettingsComponent Daily_Screening
      color = $[-1,-1,-1]
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    TextComponent text_screening
      letterHeight = 0.036
      startVal [time (s)] = 0.0
      wrapWidth = 0.88
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      text:
        [당일 포함/제외 기준 확인]

        -포함 기준
        ✓ 만 18세 이상 건강한 성인
        ✓ 신경학적·정신과적 질환 없음
        ✓ 심혈관계 약물 미복용 (베타차단제 등)
        ✓ 심혈관계 질환 없음

        -제외 기준
        ✗ 실험 30분 전 격한 운동
        ✗ 실험 30분 전 커피 섭취

        모두 충족 → Y     해당 있음 → N
    KeyboardComponent key_screening
      allowedKeys = 'y','n'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_screening
      Code Type = Py
      End Routine:
        if key_screening.keys and key_screening.keys[0] == 'n':
            core.quit()
  Routine Experiment_Instruction
    RoutineSettingsComponent Experiment_Instruction
      color = $[-1,-1,-1]
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    TextComponent text_instr
      letterHeight = 0.038
      startVal [time (s)] = 0.0
      wrapWidth = 0.88
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      text:
        [실험 안내]

        지금부터 메트로놈 소리가 들립니다.
        이 소리를 여러분의 심장 박동 소리로
        생각해 주시기 바랍니다.

        실험 중 주의사항:
          · 화면 중앙을 계속 바라봐 주세요
          · 몸을 최대한 움직이지 말아 주세요
          · 편안하게 호흡하세요

        중간에 숫자 질문이 나오면
        키보드 숫자(1~7)로 응답해 주세요.

        실험은 약 30분 진행됩니다.

        준비되셨으면 스페이스바를 누르세요.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_counterbalance
      Code Type = Py
      Begin Experiment:
        try:
            p_num = int(expInfo.get('participant', 0))
        except:
            p_num = 0

        # accel / decel / neutral 3조건 라틴스퀘어 6순서
        orders = [
            [{'block_type': 'accel',   'direction': 'faster'}, {'block_type': 'decel',   'direction': 'slower'}, {'block_type': 'neutral', 'direction': 'same'}],
            [{'block_type': 'accel',   'direction': 'faster'}, {'block_type': 'neutral', 'direction': 'same'},   {'block_type': 'decel',   'direction': 'slower'}],
            [{'block_type': 'decel',   'direction': 'slower'}, {'block_type': 'accel',   'direction': 'faster'}, {'block_type': 'neutral', 'direction': 'same'}],
            [{'block_type': 'decel',   'direction': 'slower'}, {'block_type': 'neutral', 'direction': 'same'},   {'block_type': 'accel',   'direction': 'faster'}],
            [{'block_type': 'neutral', 'direction': 'same'},   {'block_type': 'accel',   'direction': 'faster'}, {'block_type': 'decel',   'direction': 'slower'}],
            [{'block_type': 'neutral', 'direction': 'same'},   {'block_type': 'decel',   'direction': 'slower'}, {'block_type': 'accel',   'direction': 'faster'}],
        ]

        block_sequence = orders[p_num % 6]
        expInfo['assigned_order'] = f"order_{p_num % 6}"
        current_phase_label = 'P2_ramp_end'
  Routine PPG_Setup
    RoutineSettingsComponent PPG_Setup
      color = $[-1,-1,-1]
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    TextComponent text_device
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      text [set every frame] = PPG Calibration
      wrapWidth = 0.88
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    CodeComponent code_ppg_setup
      Code Type = Py
      Begin Routine:
        from psychopy import event

        # In-process biofeedback에 calibration 시작 신호
        outlet.push_sample(['calibration_start'])  # fNIRS 동기용 마커
        bf.start_calibration()
        calib_start_t = core.getTime()
        CALIB_DURATION = 60.0
      Each Frame:
        elapsed = core.getTime() - calib_start_t
        remaining = max(0, CALIB_DURATION - elapsed)

        if bf.is_calibration_done():
            _bpm = bf.get_baseline_bpm()
            if _bpm is None:
                _bpm = 70.0
            expInfo['baseline_bpm'] = float(_bpm)
            text_device.text = (
                f'Calibration 완료\n\n'
                f'baseline = {_bpm:.1f} BPM\n\n'
                f'[스페이스] 다음으로'
            )
        else:
            _ecg_status = ('ECG: OK' if ('ecg_renderer' in globals() and ecg_renderer is not None)
                           else 'ECG: 초기화 실패')
            text_device.text = (
                f'PPG Calibration 진행 중...\n\n'
                f'{remaining:0.0f}초 남음\n\n'
                f'(참가자: 가만히 휴식)\n\n'
                f'[{_ecg_status}]  [output BPM: {bf.get_output_bpm():.1f}]'
            )

        # ECG 미리보기 (calibration 동안에도 박동 확인)
        if 'ecg_renderer' in globals() and ecg_renderer is not None:
            ecg_renderer.update(elapsed, bf.get_output_bpm())
            ecg_renderer.draw()

        # Space로 진행 (calibration 완료 후 또는 60초 경과 후 강제 진행)
        if 'space' in event.getKeys(keyList=['space']):
            if not bf.is_calibration_done():
                expInfo['baseline_bpm'] = 70.0
            continueRoutine = False
      End Routine:
        thisExp.addData('baseline_bpm', expInfo.get('baseline_bpm', 70.0))
  Routine TestRun_Instruction_
    RoutineSettingsComponent TestRun_Instruction_
      color = $[-1,-1,-1]
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    TextComponent text_testrun_instr
      letterHeight = 0.045
      startVal [time (s)] = 0.0
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      text:
        [연습 시작]

        지금부터 짧은 연습을 진행합니다.
        실제 실험과 동일한 방식이며,
        중간에 숫자 질문이 나오면 응답해 주세요.

        준비되면 스페이스바를 누르세요.
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine TestRun_Phase1
    RoutineSettingsComponent TestRun_Phase1
      color = $[-1,-1,-1]
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    TextComponent fix_test1
      letterHeight = 0.15
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
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    CodeComponent code_test1
      Code Type = Py
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      Begin Routine:
        thisExp.addData('phase', 'test_sync')
        thisExp.addData('phase_onset', core.getTime())
        # TestRun에서도 base_bpm 사용 가능하도록
        try:
            base_bpm = float(expInfo.get('baseline_bpm', 70))
        except Exception:
            base_bpm = 70
      Each Frame:
        if ecg_renderer is not None:
            try:
                ecg_renderer.update(t, base_bpm)
                ecg_renderer.draw()
                status_text.text = f'TestRun_Phase1  ECG OK  bpm={base_bpm:.0f}  t={t:.1f}'
            except Exception as _e:
                status_text.text = f'ECG draw error: {_e!r}'
        else:
            status_text.text = f'TestRun_Phase1  ECG=None  init_err={_ecg_init_err}'
        status_text.draw()
  Routine TestRun_Likert
    RoutineSettingsComponent TestRun_Likert
      color = $[-1,-1,-1]
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    TextComponent text_testlikert
      letterHeight = 0.042
      startVal [time (s)] = 0.0
      wrapWidth = 0.85
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      text:
        [연습 응답]

        지금 들리는 소리가 실제 심박과
        얼마나 차이나는 것 같나요?

        1 ────────────────── 7
        차이 없음                                 매우 다름

        숫자 키(1~7)를 누르세요.
    KeyboardComponent key_testlikert
      allowedKeys = '1','2','3','4','5','6','7'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code
      Code Type = Py
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      Begin Experiment:
        thisExp.addData('test_likert_bpm', key_testlikert.keys)
  Routine TestRun_End
    RoutineSettingsComponent TestRun_End
      color = $[-1,-1,-1]
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    TextComponent text
      letterHeight = 0.048
      startVal [time (s)] = 0.0
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      text:
        연습이 끝났습니다.

        잠시 후 본 실험이 시작됩니다.
        편안하게 앉아서 기다려 주세요.

        60초 후 자동으로 넘어갑니다.
    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_testrun_end
      Code Type = Py
      Each Frame:
        secs_left = max(0, int(60 - t))
        text.text = f'연습이 끝났습니다.\n\n잠시 후 본 실험이 시작됩니다.\n편안하게 앉아서 기다려 주세요.\n\n{secs_left}초 후 자동으로 넘어갑니다.'
        if t >= 60.0:
            continueRoutine = False
  Routine Stabilization_Rest_
    RoutineSettingsComponent Stabilization_Rest_
      color = $[-1,-1,-1]
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    TextComponent text_stabilize
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
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      text:
        시선은 화면 중앙에 고정하고
        잠시 휴식을 취해 주세요.
    CodeComponent code_stabilize
      Code Type = Py
      Begin Experiment:
        text_stabilize.text = '편안하게 쉬세요.\n\n30초 후 실험이 시작됩니다.'
      Each Frame:
        from psychopy import event

        # 30초 카운트다운
        secs_left = max(0, int(30 - t))
        text_stabilize.text = f'편안하게 쉬세요.\n\n{secs_left}초 후 실험이 시작됩니다.'

        # ECG/하트 표시 (참가자 BPM에 동기)
        try:
            _bb = float(expInfo.get('baseline_bpm', 70))
        except Exception:
            _bb = 70.0
        if ecg_renderer is not None:
            try:
                ecg_renderer.update(t, _bb)
                ecg_renderer.draw()
            except Exception as _e:
                status_text.text = f'ECG draw error: {_e!r}'
                status_text.draw()

        if t >= 30.0 or 'space' in event.getKeys():
            continueRoutine = False
  Routine Baseline
    RoutineSettingsComponent Baseline
      color = $[-1,-1,-1]
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    TextComponent fix_baseline
      letterHeight = 0.15
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
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    CodeComponent baseline
      Code Type = Py
      Begin Routine:
        outlet.push_sample(['baseline'])
        thisExp.addData('phase', 'baseline')
        thisExp.addData('phase_onset', core.getTime())
        try:
            base_bpm = float(expInfo.get('baseline_bpm', 70))
        except Exception:
            base_bpm = 70
      Each Frame:
        # Baseline 동안 ECG/하트 표시 (참가자 baseline BPM)
        if ecg_renderer is not None:
            try:
                ecg_renderer.update(t, base_bpm)
                ecg_renderer.draw()
                status_text.text = f'Baseline  bpm={base_bpm:.0f}  t={t:.1f}'
            except Exception as _e:
                status_text.text = f'ECG draw error: {_e!r}'
        else:
            status_text.text = f'Baseline  ECG=None  init_err={_ecg_init_err}'
        status_text.draw()
  Routine Phase1_Sync
    RoutineSettingsComponent Phase1_Sync
      color = $[-1,-1,-1]
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    TextComponent fix_p1
      letterHeight = 0.15
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
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    CodeComponent code_p1
      Code Type = Py
      Begin Routine:
        # CRITICAL: routineTimer 강제 리셋 (non-slip 누적 방지 — while loop 진입 보장)
        routineTimer.reset()
        try:
            idx = block_loop.thisN if hasattr(block_loop, 'thisN') else 0
            block_type = block_sequence[idx]['block_type']
            direction = block_sequence[idx]['direction']
            print(f'[PSYCHOPY] Phase1_Sync block[{idx+1}/3]={block_type} begin', flush=True)
            outlet.push_sample([block_type])
            outlet.push_sample(['P1_sync'])
            thisExp.addData('block_type', block_type)
            thisExp.addData('block_idx', idx)
            thisExp.addData('phase', 'P1_sync')
            thisExp.addData('phase_onset', core.getTime())
            try:
                base_bpm = float(expInfo.get('baseline_bpm', 70))
            except:
                base_bpm = 70
            current_phase_label = 'P2_ramp_end'
        except Exception as _e:
            print(f'[PSYCHOPY ERROR] Phase1_Sync Begin Routine: {_e!r}', flush=True)
            import traceback; traceback.print_exc()
            idx = 0
            block_type = 'neutral'
            direction = 'same'
            base_bpm = 70
            current_phase_label = 'P2_ramp_end'
      Each Frame:
        # status_text는 ECG와 분리 — ECG 예외에도 status는 항상 갱신/표시
        status_text.text = f'P1_sync  block[{idx+1}/3]={block_type}  bpm={base_bpm:.0f}  t={t:.1f}/60s  (60초 후 자동 진행)'
        try:
            if bpm_inlet is not None:
                sample, _ = bpm_inlet.pull_sample(timeout=0.0)
                if sample:
                    thisExp.addData('actual_bpm', float(sample[0]))
                    thisExp.addData('actual_bpm_t', t)
        except Exception as _e:
            print(f'[PSYCHOPY] P1 bpm log err: {_e!r}', flush=True)
        try:
            if ecg_renderer is not None:
                ecg_renderer.update(t, base_bpm)
                ecg_renderer.draw()
        except Exception as _e:
            print(f'[PSYCHOPY] P1 ECG err: {_e!r}', flush=True)
            status_text.text = f'P1_sync  ECG ERROR: {_e!r}  t={t:.1f}/60s'
        status_text.draw()
      End Routine:
        print(f'[PSYCHOPY] Phase1_Sync END (60s reached). Moving to ramp_loop -> Phase2_Mini_')
  Routine Phase2_Mini_
    RoutineSettingsComponent Phase2_Mini_
      color = $[-1,-1,-1]
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    TextComponent fix_mini
      letterHeight = 0.15
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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    CodeComponent code_mini
      Code Type = Py
      Begin Experiment:
        mini_epoch_count = 0
      Begin Routine:
        # CRITICAL: routineTimer 강제 리셋
        routineTimer.reset()
        try:
            outlet.push_sample(['P2_ramp'])
            mini_epoch_count += 1
            elapsed_total = (mini_epoch_count - 1) * 20
            print(f'[PSYCHOPY] Phase2_Mini_ ep{mini_epoch_count}/9 begin', flush=True)
            try:
                base_bpm = float(expInfo.get('baseline_bpm', 70))
            except:
                base_bpm = 70
            # idx와 block_type은 Phase1_Sync에서 설정됨
            if 'idx' not in dir() or 'block_type' not in dir():
                idx = block_loop.thisN if hasattr(block_loop, 'thisN') else 0
                block_type = block_sequence[idx]['block_type']
            mismatch_now = min(25.0, (elapsed_total / 180.0) * 25.0)
            if block_type == 'accel':
                current_bpm = base_bpm * (1 + mismatch_now / 100.0)
            elif block_type == 'decel':
                current_bpm = base_bpm * (1 - mismatch_now / 100.0)
            else:
                mismatch_now = 0.0
                current_bpm = base_bpm
            thisExp.addData('phase', 'P2_ramp')
            thisExp.addData('epoch_num', mini_epoch_count)
            thisExp.addData('mismatch_pct', round(mismatch_now, 2))
            thisExp.addData('current_bpm', round(current_bpm, 2))
            thisExp.addData('block_type', block_type)
            thisExp.addData('phase_onset', core.getTime())
        except Exception as _e:
            print(f'[PSYCHOPY ERROR] Phase2_Mini_ Begin Routine: {_e!r}')
            import traceback; traceback.print_exc()
            # fallback 값으로 진행 (창 닫지 않음)
            base_bpm = 70
            current_bpm = 70
            mismatch_now = 0.0
            block_type = 'neutral'
            idx = 0
      Each Frame:
        status_text.text = f'P2_ramp  block[{idx+1}/3]={block_type}  ep{mini_epoch_count}/9  bpm={current_bpm:.0f}  mismatch={mismatch_now:.0f}%  t={t:.1f}/20s'
        try:
            if bpm_inlet is not None:
                sample, _ = bpm_inlet.pull_sample(timeout=0.0)
                if sample:
                    thisExp.addData('actual_bpm', float(sample[0]))
                    thisExp.addData('actual_bpm_t', t)
        except Exception as _e:
            print(f'[PSYCHOPY] P2 bpm log err: {_e!r}', flush=True)
        try:
            if ecg_renderer is not None:
                ecg_renderer.update(t, current_bpm)
                ecg_renderer.draw()
        except Exception as _e:
            print(f'[PSYCHOPY] P2 ECG err: {_e!r}', flush=True)
        status_text.draw()
  Routine Likert_InBlock_
    RoutineSettingsComponent Likert_InBlock_
      color = $[-1,-1,-1]
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    TextComponent text_inblock
      letterHeight = 0.042
      startVal [time (s)] = 0.0
      wrapWidth = 0.85
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      text:
        지금 들리는 소리가 실제 심박과
        얼마나 다른 것 같나요?

        1 ────────────────── 7
        차이 없음                                 매우 다름

        숫자 키(1~7)를 누르세요.
    KeyboardComponent key_inblock
      allowedKeys = '1','2','3','4','5','6','7'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent Likert_InBlock
      Code Type = Py
      Begin Routine:
        # 참가자 창의 ECG를 숨기고 Likert 텍스트를 표시하라고 biofeedback에 알림
        _likert_msg = text_inblock.text.replace('\n', '  ')
        outlet.push_sample([f'likert_on:{_likert_msg}'])
      End Routine:
        outlet.push_sample(['likert_off'])  # 참가자 창 ECG 복원
        thisExp.addData('likert_bpm_inblock', key_inblock.keys)
        thisExp.addData('likert_epoch', mini_epoch_count)
        thisExp.addData('likert_time', core.getTime())
        thisExp.addData('likert_phase', current_phase_label)
        thisExp.addData('block_type', block_type)
  Routine Phase3_Plateau
    RoutineSettingsComponent Phase3_Plateau
      color = $[-1,-1,-1]
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    TextComponent fix_p3
      letterHeight = 0.15
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 45
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    CodeComponent phase3_plateau
      Code Type = Py
      Begin Routine:
        routineTimer.reset()
        outlet.push_sample(['P3_plateau'])
        print(f'[PSYCHOPY] Phase3_Plateau begin', flush=True)
        current_phase_label = 'P3_plateau_end'
        thisExp.addData('phase', 'P3_plateau')
        thisExp.addData('mismatch_pct', 25.0 if block_type != 'neutral' else 0.0)
        thisExp.addData('phase_onset', core.getTime())
        try:
            base_bpm = float(expInfo.get('baseline_bpm', 70))
        except:
            base_bpm = 70
        if block_type == 'accel':
            plateau_bpm = base_bpm * 1.25
        elif block_type == 'decel':
            plateau_bpm = base_bpm * 0.75
        else:
            plateau_bpm = base_bpm
      Each Frame:
        status_text.text = f'P3_plateau  block[{idx+1}/3]={block_type}  bpm={plateau_bpm:.0f}  t={t:.1f}/45s'
        try:
            if bpm_inlet is not None:
                sample, _ = bpm_inlet.pull_sample(timeout=0.0)
                if sample:
                    thisExp.addData('actual_bpm', float(sample[0]))
                    thisExp.addData('actual_bpm_t', t)
        except Exception as _e:
            print(f'[PSYCHOPY] P3 bpm log err: {_e!r}', flush=True)
        try:
            if ecg_renderer is not None:
                ecg_renderer.update(t, plateau_bpm)
                ecg_renderer.draw()
        except Exception as _e:
            print(f'[PSYCHOPY] P3 ECG err: {_e!r}', flush=True)
        status_text.draw()
  Routine Phase4_Recovery
    RoutineSettingsComponent Phase4_Recovery
      color = $[-1,-1,-1]
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    TextComponent fix_p4
      letterHeight = 0.15
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
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    CodeComponent phase4_recovery
      Code Type = Py
      Begin Routine:
        routineTimer.reset()
        outlet.push_sample(['P4_recovery'])
        print(f'[PSYCHOPY] Phase4_Recovery begin', flush=True)
        thisExp.addData('phase', 'P4_recovery')
        thisExp.addData('mismatch_pct', 0.0)
        thisExp.addData('phase_onset', core.getTime())
        mini_epoch_count = 0
        try:
            base_bpm = float(expInfo.get('baseline_bpm', 70))
        except Exception:
            base_bpm = 70
      Each Frame:
        status_text.text = f'P4_recovery  block[{idx+1}/3]={block_type}  bpm={base_bpm:.0f}  t={t:.1f}/60s'
        try:
            if bpm_inlet is not None:
                sample, _ = bpm_inlet.pull_sample(timeout=0.0)
                if sample:
                    thisExp.addData('actual_bpm', float(sample[0]))
                    thisExp.addData('actual_bpm_t', t)
        except Exception as _e:
            print(f'[PSYCHOPY] P4 bpm log err: {_e!r}', flush=True)
        try:
            if ecg_renderer is not None:
                ecg_renderer.update(t, base_bpm)
                ecg_renderer.draw()
        except Exception as _e:
            print(f'[PSYCHOPY] P4 ECG err: {_e!r}', flush=True)
        status_text.draw()
  Routine Rest_Between_Blocks
    RoutineSettingsComponent Rest_Between_Blocks
      color = $[-1,-1,-1]
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    TextComponent text_rest
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 90
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      text:
        잠시 휴식하세요.
    CodeComponent Rest_Between_Blocks_2
      Code Type = Py
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      Begin Routine:
        # 마지막 블록(3번째, index=2)이면 휴식 건너뜀
        if block_loop.thisN >= 2:
            continueRoutine = False
      Each Frame:
        from psychopy import event

        # 90초 카운트다운 실시간 계산
        secs_left = max(0, int(90 - t))
        text_rest.text = f'잠시 휴식하세요.\n\n{secs_left}초 후 계속됩니다.'

        # 90초가 모두 경과했거나, 스페이스바를 누르면 안전하게 다음 블록으로 전환
        if t >= 90.0 or 'space' in event.getKeys():
            continueRoutine = False
  Routine PostExp_Likert_BPM
    RoutineSettingsComponent PostExp_Likert_BPM
      color = $[-1,-1,-1]
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    TextComponent text_post_bpm
      letterHeight = 0.042
      startVal [time (s)] = 0.0
      wrapWidth = 0.85
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      text:
        [실험 후 질문 1/2]

        실험 전체에서 들으셨던 메트로놈 소리가
        실제 심장 박동과 얼마나 달랐나요?

        1 ────────────────── 7
        차이 없음                                 매우 다름

        숫자 키(1~7)를 누르세요.
    KeyboardComponent key_post_bpm
      allowedKeys = '1','2','3','4','5','6','7'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent PostExp_Likert_BPM_2
      Code Type = Py
      End Routine:
        thisExp.addData('postexp_likert_bpm', key_post_bpm.keys)
  Routine PostExp_Likert_Trust
    RoutineSettingsComponent PostExp_Likert_Trust
      color = $[-1,-1,-1]
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    TextComponent text_post_trust
      letterHeight = 0.042
      startVal [time (s)] = 0.0
      wrapWidth = 0.85
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      text:
        [실험 후 질문 2/2]

        실험 중 들으셨던 메트로놈 피드백은
        얼마나 믿을만했나요?

        <해당 피드백은 믿을만했는가?>

        1 ────────────────── 7
        차이 없음                                 매우 다름

        숫자 키(1~7)를 누르세요.
    KeyboardComponent key_post_trust
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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      allowedKeys:
        '1','2','3','4','5','6','7'
    CodeComponent PostExp_Likert_Trust_2
      Code Type = Py
      End Routine:
        thisExp.addData('postexp_likert_trust', key_post_trust.keys)
  Routine MAIA_Instruction
    RoutineSettingsComponent MAIA_Instruction
      color = $[-1,-1,-1]
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    TextComponent MAIA__Instruction
      letterHeight = 0.042
      startVal [time (s)] = 0.0
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      text:
        [설문 안내]

        이제 신체 감각에 관한 설문을 진행합니다.
        총 24문항입니다.

        각 문항을 읽고 자신에게 해당하는 정도를
        1(전혀 아니다) ~ 6(항상 그렇다)으로
        마우스로 클릭해서 응답해 주세요.

        준비되면 스페이스바를 누르세요.
    KeyboardComponent MAIA___Instruction
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine MAIA_Survey_
    RoutineSettingsComponent MAIA_Survey_
      color = $[-1,-1,-1]
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    SliderComponent maia_slider
      font = Noto Sans
      forceEndRoutine = True
      granularity = 0
      labels = 1, 2, 3, 4, 5, 6
      letterHeight = 0.05
      pos = (0, -0.2)
      size = (0.85, 0.07)
      startVal [time (s)] = 0.0
      storeHistory = True
      styles = rating
      ticks = 1, 2, 3, 4, 5, 6
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    CodeComponent maia_survey
      Code Type = Py
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      Begin Routine:
        maia_slider.reset()
      Each Frame:
        keys = event.getKeys(['1','2','3','4','5','6'])
        if keys:
            maia_slider.rating = int(keys[0])
            maia_slider.markerPos = int(keys[0])
            continueRoutine = False
      End Routine:
        thisExp.addData('maia_item_num', item_num)
        thisExp.addData('maia_subscale', subscale)
        thisExp.addData('maia_rating', maia_slider.getRating())
        maia_slider.reset()
    TextComponent label_left
      font = Malgun Gothic
      letterHeight = 0.04
      pos = (-0.42, -0.35)
      startVal [time (s)] = 0.0
      text = 전혀 아니다
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    TextComponent label_right
      font = Malgun Gothic
      letterHeight = 0.04
      pos = (0.42, -0.35)
      startVal [time (s)] = 0.0
      text = 항상 그렇다
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    TextComponent MAIA_item_text
      font = Malgun Gothic
      letterHeight = 0.05
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        $f"문항 {item_num} / 24\n\n{item_text}"
  Routine Debrief
    RoutineSettingsComponent Debrief
      color = $[-1,-1,-1]
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    TextComponent text_debrief
      letterHeight = 0.038
      startVal [time (s)] = 0.0
      wrapWidth = 0.88
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      text:
        [디브리핑]

        실험에 참여해주셔서 감사합니다.

        사실 오늘 들으셨던 메트로놈 소리는
        실제 심장 박동 소리가 아닌,
        인위적으로 조작된 신호였습니다.

        이 연구는 외부에서 주어진 가짜 신체 신호가
        전두엽 뇌 활동과 내수용 감각에
        어떤 영향을 미치는지 연구합니다.

        궁금한 점이 있으시면
        실험자에게 자유롭게 질문해 주세요.

        수고하셨습니다.

        [스페이스바] 종료
    KeyboardComponent debief
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_debrief
      Code Type = Py
      End Routine:
        outlet.push_sample(['experiment_end'])
Flow
  Routine Experimenter_Welcome
  Routine Daily_Screening
  Routine Experiment_Instruction
  Routine TestRun_Instruction_
  Routine TestRun_Phase1
  Routine TestRun_Likert
  Routine TestRun_End
  Routine Stabilization_Rest_
  Routine Baseline
  LoopInitiator block_loop loopType="TrialHandler"
    loopType = sequential
    nReps = 3
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    Routine Phase1_Sync
    LoopInitiator ramp_loop loopType="TrialHandler"
      loopType = sequential
      nReps = 9
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      Routine Phase2_Mini_
    LoopTerminator ramp_loop
    Routine Likert_InBlock_
    Routine Phase3_Plateau
    Routine Likert_InBlock_
    Routine Phase4_Recovery
    Routine Rest_Between_Blocks
  LoopTerminator block_loop
  Routine PostExp_Likert_BPM
  Routine PostExp_Likert_Trust
  Routine MAIA_Instruction
  LoopInitiator maia_loop loopType="TrialHandler"
    conditionsFile = conditions/maia_items.xlsx
    loopType = sequential
    nReps = 1
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    Routine MAIA_Survey_
  LoopTerminator maia_loop
  Routine Debrief
